# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Cryomagnetics_MPS4G

# The version string should be updated whenever changes are made to this config file
version: 1.0

startup: Do nothing

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Cryomagnetics_MPS4G

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

timeout: 305
str_value_out: %.6e
term_char: None
send_end_on_write: True
baud_rate: 9600

# SCPI string to be used when querying for instrument error messages
error_cmd:

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init:

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
str_true: ON
str_false: OFF

# Final commands sent to the instrument when closing the driver
final:

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
#GPIB:: 1


[Rate]
datatype: DOUBLE
unit: A/s
permission: BOTH
get_cmd: RATE? 0
set_cmd: RATE 0 <*>
high_lim: 0.0120

[B]
datatype: DOUBLE
permission: BOTH
unit: mT
#unit: kGauss
def_value: 0.0000
low_lim: -8000.0000
high_lim: 8000.0000
#get_cmd: IOUT?
sweep_cmd: SWEEP<sr>
sweep_res: 0.5
stop_cmd: SWEEP PAUSE
sweep_rate: 0.0000
sweep_rate_low: 0.0000
sweep_rate_high: 0.0400

[BRead]
datatype: DOUBLE
permission: BOTH
get_cmd: IOUT?

[Persistent Heater Switch]
# ok
datatype: BOOLEAN
permission: READ
get_cmd:PSHTR?

[Sweep]
# ok
datatype: STRING
permission: READ
get_cmd:SWEEP?

[Upper Sweep Limit]
# ok
datatype: DOUBLE
permission: BOTH
unit: mT
set_cmd:ULIM <*>
#get_cmd:ULIM?
#def_value: 0.0000
#low_lim: 0.0000
#high_lim: 10.0000

[Lower Sweep Limit]
# ok
datatype: DOUBLE
permission: BOTH
unit: mT
set_cmd:LLIM <*>
#get_cmd:LLIM?
#def_value: -0.0001
#low_lim: -10.0000
#high_lim: -0.0001

#[Magnet Current]
# ok
#datatype: DOUBLE
#permission: READ
#unit: A
#get_cmd:IMAG?

